PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SadnessMood
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Experiment

        Please press spacebar to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import serial
        port = serial.Serial("COM3",baudrate= 9600)
  Routine Goodbye
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        You have finished the Experiment

        You have done very well!!!!

        Thanks!!!
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.75
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  Routine video1
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $movies
      startVal [time (s)] = 0.0
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  Routine blank
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent Trigger
      Code Type = Auto->JS
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      End Routine:
        port.write(b'A001')
        port.write(b'A000')
  Routine landmark
    ImageComponent image
      image = images\lineaH.png
      size = (1.5, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    ImageComponent image_2
      image [set every repeat] = $lineas
      pos [set every repeat] = pos
      size [set every repeat] = (0.02, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    KeyboardComponent key_resp_2
      allowedKeys = 'h','l','t','p'
      correctAns = $correct_key
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      storeCorrect = True
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  Routine blanklandmark
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
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  Routine Intructions
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions

        Now you will watch some videoclips.
        Please, let yourself be carried away by the emotion that is represented in each of the scenes that you will watch.
        After each videoclip you will should to perform a landmark again.

        Remember:

        If the left side is longer than the left side you should press  "H" and "L" keys.
        If the right side is longer than the right side you should press  "T"  and "P" keys.

        Press spacebar to start the experiment whey you be ready.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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Flow
  Routine Welcome
  Routine Intructions
  Routine blank
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ConditionsMovies.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'movies': 'Movies_Sadness/1_City_of _angels.mp4'},
      {'movies': 'Movies_Sadness/2_life_is_beautiful1.mp4'},
      {'movies': 'Movies_Sadness/3_Philadelphia.mp4'},
      {'movies': 'Movies_Sadness/4_Schindler´s_list1.mp4'},
      {'movies': 'Movies_Sadness/5_The_dead_poets_society1.mp4'},
      {'movies': 'Movies_Sadness/6_A_Perfect_World.mp4'},
      {'movies': 'Movies_Sadness/7_Campagne_2018.mp4'},
      {'movies': 'Movies_Sadness/8_Dangerous_Minds.mp4'},
      {'movies': 'Movies_Sadness/9_ET.mp4'},
      {'movies': 'Movies_Sadness/10_UP.mp4'},
      {'movies': 'Movies_Sadness/11_El_pianista.mp4'},
      {'movies': 'Movies_Sadness/12_Schindler´s_list.mp4'},
      {'movies': 'Movies_Sadness/13_Sophie.mp4'},
      {'movies': 'Movies_Sadness/14_Starving_polar_bear.mp4'},
      {'movies': 'Movies_Sadness/15_The_Fault_in_our_Stars.mp4'}]
    Routine video1
    Routine blank
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = Libro1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'lineas': 'images/lineaV', 'pos': (0, 0), 'correct_key': 'none'},
        {'lineas': 'images/lineaV', 'pos': (0.045, 0), 'correct_key': (['h', 'l'], ['l', 'h'])},
        {'lineas': 'images/lineaV', 'pos': (-0.05, 0), 'correct_key': (['t', 'p'], ['p', 't'])},
        {'lineas': 'images/lineaV', 'pos': (-0.03, 0), 'correct_key': (['t', 'p'], ['p', 't'])},
        {'lineas': 'images/lineaV', 'pos': (0.055, 0), 'correct_key': (['h', 'l'], ['l', 'h'])},
        {'lineas': 'images/lineaV', 'pos': (0.035, 0), 'correct_key': (['h', 'l'], ['l', 'h'])},
        {'lineas': 'images/lineaV', 'pos': (-0.055, 0), 'correct_key': (['t', 'p'], ['p', 't'])},
        {'lineas': 'images/lineaV', 'pos': (0, 0), 'correct_key': 'none'}]
      Routine landmark
      Routine blanklandmark
    LoopTerminator trials_2
    Routine rest
  LoopTerminator trials
  Routine Goodbye
